PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = solo project
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine welcome
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    TextComponent text
      languageStyle = RTL
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        This experiment will be divided into 2 phases. Phase 1 will be followed with 'Spot the difference' and Phase two will be followed by Object Hide-n-seek'. These images would be followed by questions regarding the same. So make sure that you look at the picture intently.

        If you agree to be a part of this experiment further, please press the 'Spacebar'. If you wish to not be a part of the experiment, please press the 'esc' key.

        Thank you!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_1
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        PHASE 1

        In this part of the experiment, you will be presented with images and you need detect on how many differences you were able to find. You will be under a time limit of 15 seconds. Answer truthfully and honestly. To start, please press the 'Spacebar'.

        ALL THE BEST!
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phase_1
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    ImageComponent image
      image [set every repeat] = $Imagefile
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 15.0
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      text:
        How many differences did you spot?
        (Range 1-9)
    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      correctAns = $Corr_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 15.0
      storeCorrect = True
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  Routine instruction_2
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Phase 1 of the experiment has ended. You can take a break.

        PHASE 2

        In this part of the experiment, you will be presented with a series of images, folowed by a question for the same. Some of the images might have the objects hidden in the image as asked in the question and some might not. In this phase as well you will be under a time limt of 20 seconds. Answer truthfully and honestly. To begin phase 2, press the 'Spacebar'

        BEST OF LUCK!
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phase_2
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    ImageComponent image_2
      image [set every repeat] = $Imagefile
      size = (1.25, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 20
      text = Press 'y' if the object was present and 'n' if the object was not present
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n'
      correctAns = $Corr_resp
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 20.0
      storeCorrect = True
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  Routine thank_you
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        THE END

        Thank you for being a part of the experiment :)
Flow
  Routine welcome
  Routine instruction_1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition for spot the difference.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Imagefile': 'images/std-6.png', 'Corr_resp': 8},
      {'Imagefile': 'images/std-10.png', 'Corr_resp': 8},
      {'Imagefile': 'images/std-7.jpeg', 'Corr_resp': 2},
      {'Imagefile': 'images/std-14.jpg', 'Corr_resp': 2},
      {'Imagefile': 'images/std-2.jpg', 'Corr_resp': 7},
      {'Imagefile': 'images/std-15.png', 'Corr_resp': 3},
      {'Imagefile': 'images/std-1.png', 'Corr_resp': 6},
      {'Imagefile': 'images/std-13.jpg', 'Corr_resp': 5},
      {'Imagefile': 'images/std-8.png', 'Corr_resp': 3},
      {'Imagefile': 'images/std-11.png', 'Corr_resp': 3},
      {'Imagefile': 'images/std-12.png', 'Corr_resp': 4},
      {'Imagefile': 'images/std-9.png', 'Corr_resp': 9},
      {'Imagefile': 'images/std-3.png', 'Corr_resp': 1},
      {'Imagefile': 'images/std-4.png', 'Corr_resp': 4},
      {'Imagefile': 'images/std-5.png', 'Corr_resp': 5}]
    Routine phase_1
  LoopTerminator trials
  Routine instruction_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = condition for hidden object.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Imagefile': 'images2/1.png', 'Corr_resp': 'y'},
      {'Imagefile': 'images2/2.png', 'Corr_resp': 'y'},
      {'Imagefile': 'images2/3.png', 'Corr_resp': 'n'},
      {'Imagefile': 'images2/4.png', 'Corr_resp': 'y'},
      {'Imagefile': 'images2/5.png', 'Corr_resp': 'n'},
      {'Imagefile': 'images2/8.png', 'Corr_resp': 'y'},
      {'Imagefile': 'images2/7.png', 'Corr_resp': 'n'},
      {'Imagefile': 'images2/6.png', 'Corr_resp': 'n'},
      {'Imagefile': 'images2/9.png', 'Corr_resp': 'y'},
      {'Imagefile': 'images2/10.png', 'Corr_resp': 'n'}]
    Routine phase_2
  LoopTerminator trials_2
  Routine thank_you
